CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith "d0.TIF") (file does endwith "d1.TIF") (file does endwith "d2.TIF")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Z_Stack": "integer", "Time": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_(?P<Row>[A-H])(?P<Column>\d{2})f(?P<Site>\d{2})d\d\.TIF$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Brightfield_invert
    Image or measurement?:Image
    Select the first image:Brightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:6|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enabled:False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
    Select the input image:Brightfield_invert
    Name the output image:Brightfield_Enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:DIC
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    Smoothing scale:1
    Shear angle:0
    Decay:0.95
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:mCherry
    Name the primary objects to be identified:mCherry_positive
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.1,0.95
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:GFP
    Name the primary objects to be identified:GFP_positive
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.15
    Lower and upper bounds on threshold:0.1,0.95
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:9|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enabled:False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
    Select the input image:Brightfield_Enhanced
    Name the primary objects to be identified:Brightfield_Cell
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.348
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.01,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:10|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enabled:False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
    Select objects to be masked:DNA
    Name the masked objects:Masked_DNA_Brightfield
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Brightfield_Cell
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:11|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enabled:False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
    Parent objects:GFP_positive
    Child objects:mCherry_positive
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:GFP_mCherry_Positive
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
MeasureObjectOverlap:[module_num:12|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enabled:False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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:GFP_positive
    Select the objects to be tested for overlap against the ground truth:mCherry_positive
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:GFP, mCherry
    Select objects to measure:GFP_positive, mCherry_positive

MeasureImageAreaOccupied:[module_num:14|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
    Measure the area occupied by:Objects
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    Select object sets to measure:GFP_positive, mCherry_positive

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:GFP_positive, mCherry_positive
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

LabelImages:[module_num:16|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
    Number of image sites per well:9
    Number of columns per plate:3
    Number of rows per plate:2
    Order of image data:Row

OverlayObjects:[module_num:17|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
    Input:GFP
    Name the output image:GFP_Objects
    Objects:GFP_positive
    Opacity:0.3

OverlayObjects:[module_num:18|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
    Input:mCherry
    Name the output image:mcherry_Objects
    Objects:mCherry_positive
    Opacity:0.3

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:GFP_Objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_Objects
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:mcherry_Objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:mCherry
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mCherry_Objects
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|G:\\Data\\Imaging\\03192026\\Subset_Images
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:GFP_positive|AreaShape_Zernike_9_9,GFP_positive|AreaShape_Zernike_9_1,GFP_positive|AreaShape_Zernike_9_7,GFP_positive|AreaShape_Zernike_9_3,GFP_positive|AreaShape_Zernike_9_5,GFP_positive|AreaShape_Zernike_0_0,GFP_positive|AreaShape_Zernike_8_6,GFP_positive|AreaShape_Zernike_8_4,GFP_positive|AreaShape_Zernike_8_2,GFP_positive|AreaShape_Zernike_8_8,GFP_positive|AreaShape_Zernike_8_0,GFP_positive|AreaShape_Zernike_4_4,GFP_positive|AreaShape_Zernike_4_0,GFP_positive|AreaShape_Zernike_4_2,GFP_positive|AreaShape_Zernike_5_5,GFP_positive|AreaShape_Zernike_5_3,GFP_positive|AreaShape_Zernike_5_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:H460_Group_
    Overwrite existing files without warning?:No
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